WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(Path(DisplayName=SessionPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawSubjectSchema
-> AindForceForagingDataSchema.AindForceForagingSession.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.AindForceForagingSession.AindForceForagingSession>)
-> Take(Count=1)
-> AsyncSubject SubjectSchema

ExternalizedMapping(Path(DisplayName=RigPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawRigSchema
-> AindForceForagingDataSchema.AindForceForagingRig.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.AindForceForagingRig.AindForceForagingRig>)
-> Take(Count=1)
-> AsyncSubject RigSchema

ExternalizedMapping(Path(DisplayName=TaskLogicPath))
-> Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AsyncSubject RawTaskLogicSchema
-> AindForceForagingDataSchema.AindForceForagingTask.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.AindForceForagingTask.AindForceForagingTaskLogic>)
-> Take(Count=1)
-> AsyncSubject TaskLogicSchema

GroupWorkflow SessionSettings
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
    -> PropertyMapping(Value)
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
    -> Take(Count=1)
    -> AsyncSubject TextureBankPath

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai, RootFolder=C:\data\, Subject=672102, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftHasReward

    BooleanProperty(Value=false)
    -> BehaviorSubject RightHasReward

    BooleanProperty(Value=false)
    -> BehaviorSubject IsBaitedMode

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        SubscribeSubject RigSchema
        -> MemberSelector(Selector="FaceCamera.FrameRate,FaceCamera.Exposure")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: ((1.0 / Item1) * 1000000) < Item2 + 1000
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.ThrowException(Message="Camera frame rate and exposure settings are not compatible.")

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=WaterValve)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == null
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="No water valve calibration settings found!")

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometer)
        -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai)
        -> SelectMany SampleFlow
            SubscribeSubject StartExperiment
            -> Take(Count=1) => #1
            SubscribeSubject HarpOlfactometerEvents
            -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=LowFlowThreshold)) => #5
            #4, #5 -> LessThan(Operand=FloatProperty(Value=950)) => #6
            #6, #4 -> Zip => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Flow on Channel3 is lower than expected. Reading {0}.", Selector=it)
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="Flow on Channel3 is lower than expected.")
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

Annotation(Text="")
-> GroupWorkflow Hardware
    SubscribeSubject HarpLoadCellsEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
    -> BehaviorSubject HarpTimestampSource

    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=ScaledTexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=Shaders\ScaledTexturedModel.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=AdjustQuadTexture
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=Shaders\AdjustQuadTexture.frag
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.CalibrationDirectory)
        -> PropertyMapping(Directory)
        -> IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai, Directory=Calibration\Monitors)
        -> Take(Count=1)
        -> AsyncSubject ScreenCalibration

        GroupWorkflow RenderLoop
            Bonsai.Shaders.RenderFrame
            -> PublishSubject RenderFrame => #1
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip) => #3
            #1, #3 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #4
            -> MemberSelector(Selector=ViewMatrix)
            -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #6
            #6, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as ViewMatrix,
                Item2.ProjectionMatrix as ProjectionMatrix,
                Item2.Light as Light)
            -> PublishSubject Draw3DStim
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #10
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Right)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #13
            #10, #13 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #15
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #17
            #15, #17 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1) => #19
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Center)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #22
            #10, #22 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #24
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #26
            #24, #26 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1) => #28
            SubscribeSubject ScreenCalibration
            -> MemberSelector(Selector=Left)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #31
            #10, #31 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #33
            SubscribeSubject ScreenContrast
            -> PropertyMapping(Contrast) => #35
            #33, #35 -> IncludeWorkflow
              Path=Extensions\AdjustQuadTexture.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1) => #37
            #19, #28, #37 -> Zip
            -> PublishSubject PostDrawing

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject ScreenContrast

            Annotation(Text="")
            -> GroupWorkflow SynchQuad
                BooleanProperty(Value=false)
                -> Take(Count=1) => #1
                Defer RandomInterval
                    SubscribeSubject RngSeed => #0
                    ExternalizedMapping(Lower, Upper) => #1
                    #0, #1 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=6)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Bonsai.Shaders.Timer(DueTime=PT0S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Repeat
                -> ElementIndex
                -> MemberSelector(Selector=Index)
                -> Mod(Operand=IntProperty(Value=2))
                -> Equal(Operand=IntProperty(Value=1)) => #7
                #1, #7 -> Concat
                -> BehaviorSubject SynchQuadColor

                SubscribeSubject PostDrawing
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
                -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=3, Bottom=0, Top=1) => #12
                SubscribeSubject RenderFrame
                -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                -> Accumulate
                -> ElementIndex => #16
                #12, #16 -> Zip => #17
                SubscribeSubject SynchQuadColor
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
                  Expression: it ? 1.0 : 0.0
                #17, #19 -> WithLatestFrom => #20
                -> InputMapping(SynchQuadValue(Selector=Item2), FrameIndex(Selector=Item1.Item2.Index), FrameTimestamp(Selector=Item1.Item2.Value))
                -> SelectMany CreateRenderSynchState
                    ExternalizedMapping(SynchQuadValue, FrameIndex, FrameTimestamp)
                    -> AllenNeuralDynamics.Core.Logging.RenderSynchState
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BehaviorSubject RendererSynchState => #23
                #20 -> MemberSelector(Selector=Item1.Item1) => #24
                #23, #24 -> Zip => #25
                -> InputMapping(Selector=Item2, ColorG(Selector=Item1.SynchQuadValue), ColorR(Selector=Item1.SynchQuadValue), ColorB(Selector=Item1.SynchQuadValue))
                -> IncludeWorkflow => #27
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=0.045
                  ExtentY=0.08
                  LocationX=2.925
                  LocationY=0.03
                  Layer=10
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #25 -> MemberSelector(Selector=Item1.FrameIndex)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Mod2 => #29
                  Expression: (it % 2).Value
                #25 -> MemberSelector(Selector=Item2) => #30
                #29, #30 -> Zip
                -> InputMapping(Selector=Item2, ColorG(Selector=Item1), ColorR(Selector=Item1), ColorB(Selector=Item1))
                -> IncludeWorkflow => #33
                  Path=BonVision:Primitives.DrawQuad.bonsai
                  ExtentX=0.045
                  ExtentY=0.045
                  LocationX=2.925
                  LocationY=0.15
                  Layer=10
                  Angle=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                #27, #33 -> Zip

        GroupWorkflow LoadTextureBank
            SubscribeSubject TextureBankPath
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
            -> Merge
            -> CreateObservable LoadTexture
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TexturePath

                SubscribeSubject TexturePath
                -> Bonsai.IO.GetFileNameWithoutExtension => #4
                SubscribeSubject TexturePath
                -> PropertyMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #7
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=Repeat
                  WrapT=Repeat
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=Textures\wall_4.jpg
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #7 -> Zip
                -> WorkflowOutput
            -> Merge
            -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
            -> AsyncSubject TextureBank

        ExternalizedMapping(Value(DisplayName=FarClipHorizon))
        -> FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject FarClipHorizon
    -> DelaySubscription(DueTime=PT1S)

    GroupWorkflow HarpDevices
        Annotation PinOut
          Text:
            | Function | HarpBehavior Pin | Notes |
            | --- | ----------- | ----------- |
            | Camera Trigger | DO0 |  |
            | Water Valve | Port0 Supply |  Use a poke breakout |
            | Lickometer | Port0 DI |  Use a poke breakout |
            | Encoder B | Port2 DIO | Use a poke breakout |
            | Encoder A | Port2 DI | Use a poke breakout |
            | Thermistor | ADC0 |  |
            | Pressure Sensor | ADC1 |  |
            | Photodiode | DI3 |  |
            | Servo Motor | DO2 |  |
            | Audio Buzzer | DO1 |  |
        -> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpOlfactometerDevice.bonsai, StartExperimentSubjectName=StartExperiment) => #3
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpOlfactometer)
        -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #6
        #3, #6 -> SubscribeWhen

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpLickometerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpLoadCellsDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        Annotation PinOut(Text="")
        -> IncludeWorkflow(Path=Extensions\HarpClockSynchronizerDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        IncludeWorkflow(Path=Extensions\HarpAnalogInputDevice.bonsai, StartExperimentSubjectName=StartExperiment) => #14
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #17
        #14, #17 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow MainCamera
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=FaceCamera.FrameRate)
            -> Take(Count=1)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #9
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #13
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=FaceCamera)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
            -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #20
            SubscribeSubject FrameEvent => #21
            #20, #21 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> PublishSubject FaceCameraFrameEvent

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TopBodyCamera)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
            -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #28
            SubscribeSubject FrameEvent => #29
            #28, #29 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #31
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TopBodyCamera)
            -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #34
            #31, #34 -> SubscribeWhen
            -> PublishSubject TopBodyCameraFrameEvent

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SideBodyCamera)
            -> PropertyMapping
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
            -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #40
            SubscribeSubject FrameEvent => #41
            #40, #41 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #43
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=SideBodyCamera)
            -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #46
            #43, #46 -> SubscribeWhen
            -> PublishSubject SideBodyCameraFrameEvent

        GroupWorkflow AuxiliaryCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera0.Index)
            -> PropertyMapping(Index)
            -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #3
            SubscribeSubject HarpTimestampSource => #4
            #3, #4 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera0)
            -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #9
            #6, #9 -> SubscribeWhen
            -> PublishSubject AuxiliaryCamera0

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera1.Index)
            -> PropertyMapping(Index)
            -> Bonsai.Video.VideoCaptureDevice(Index=1, CaptureProperties="") => #15
            SubscribeSubject HarpTimestampSource => #16
            #15, #16 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=AuxiliaryCamera1)
            -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #21
            #18, #21 -> SubscribeWhen
            -> PublishSubject AuxiliaryCamera1

GroupWorkflow OperationControl
    BehaviorSubject<System.Reactive.Unit> TriggerStartCue
    BehaviorSubject<System.Reactive.Unit> TriggerGoCue
    BehaviorSubject<System.Boolean> TriggerFeedbackCue

    GroupWorkflow OdorControl
        GroupWorkflow OlfactometerInitialConfiguration
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3RangePayload(Channel3Range=FlowRate1000))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableEventsPayload(EnableEvents="Flowmeter DI0Trigger ChannelActualFlow"))
            -> MulticastSubject HarpOlfactometerCommands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
            -> MulticastSubject HarpOlfactometerCommands
            -> WorkflowOutput

            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> CreateOdorMix => #11
              channel3AsCarrier=false
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=0
              Channel3AsCarrier=false
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #12
            #11 -> MemberSelector(Selector=OdorValveState) => #13
            #12, #13 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow ArmOdor
            BehaviorSubject<AindVrForagingDataSchema.AindVrForagingTask.OdorSpecification> ArmOdor

            SubscribeSubject ArmOdor
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=ArmOdor)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject ArmOdor
            -> CreateOdorMix => #5
              channel3AsCarrier=true
              PercentageChannel0=0
              PercentageChannel1=0
              PercentageChannel2=0
              PercentageChannel3=NaN
              Channel3AsCarrier=true
              TargetOdorFlow=100
              TotalFlow=1000
            -> MemberSelector(Selector=ChannelsTargetFlow) => #6
            #5 -> MemberSelector(Selector=OdorValveState) => #7
            #6, #7 -> Merge
            -> MulticastSubject HarpOlfactometerCommands

        GroupWorkflow EndValveControl
            SubscribeSubject HarpOlfactometerEvents
            -> Take(Count=1)
            -> BooleanProperty(Value=false)
            -> BehaviorSubject OdorEndValveState

            SubscribeSubject OdorEndValveState => #4
            -> Condition OdorPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
            #4 -> BitwiseNot
            -> Condition CarrierPath
                WorkflowInput Source1
                -> WorkflowOutput
            -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
            #6, #9 -> Merge
            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
            -> MulticastSubject HarpOlfactometerCommands

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BehaviorSubject<System.Nullable(System.Single)> GiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #5
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #8
        #5, #8 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
          Expression: (Item1 - Item2.Offset) / Item2.Slope
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.Parse(Register=AllenNeuralDynamics.LicketySplitLickDetector.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplitLickDetector.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #6, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow WheelEncoder
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector="Value.Encoder,Seconds") => #2
        -> MemberSelector(Selector=Item1) => #3
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.WheelDiameter)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #6
          Expression: it * Math.Pi
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.PulsesPerRevolution) => #8
        #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #10
          Expression: Item1 / Item2
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Treadmill.InvertDirection) => #12
        #10, #12 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2 ? -1.0 * Item1 : Item1
        -> PropertyMapping(RangeMax) => #15
        #3, #15 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #16
        #2 -> MemberSelector(Selector=Item2) => #17
        #16, #17 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderData

        SubscribeSubject HarpBehaviorHeartBeat => #21
        Annotation "Set displacement mode"(Text=https://github.com/harp-tech/device.behavior/pull/12) => #22
        #21, #22 -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=83, PayloadType=U8, Value=1))
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

    GroupWorkflow LoadCells
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true)) => #2
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl.Force)
        -> MemberSelector(Selector=PressMode)
        -> PropertyMapping(PressMode) => #6
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl.Force)
        -> MemberSelector(Selector=LeftIndex)
        -> PropertyMapping(LeftLoadCellIndex) => #10
        SubscribeSubject TaskLogicSchema
        -> MemberSelector(Selector=OperationControl.Force)
        -> MemberSelector(Selector=RightIndex)
        -> PropertyMapping(RightLoadCellIndex) => #14
        #2, #6, #10, #14 -> ParseForce(LeftLoadCellIndex=0, RightLoadCellIndex=1, PressMode=Double)
        -> PublishSubject CurrentForce

GroupWorkflow TaskLogic
    SubscribeSubject TaskLogicSchema
    -> GroupWorkflow PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation
        -> ToList => #7
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge
        -> ToList => #11
        #7, #11 -> Merge
        -> WorkflowOutput
    -> AsyncSubject BlockStatistics

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject BlockIndex

    GroupWorkflow BlockSwitchLogic
        SubscribeSubject IsBaitedMode
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject LeftHasReward => #3
        Annotation Reset(Text="Ensure no reward is available if the Baited mode is changed") => #4
        #3, #4 -> MulticastSubject RightHasReward

        SubscribeSubject ActiveBlock => #6
        SubscribeSubject CurrentForce
        -> MemberSelector(Selector=Seconds) => #8
        #6, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> BehaviorSubject BlockEntryTime

    SubscribeSubject BlockStatistics => #7
    SubscribeSubject BlockIndex
    -> PropertyMapping(Value) => #9
    #7, #9 -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> BehaviorSubject ActiveBlock => #12
    -> AindForceForagingDataSchema.AindForceForagingTask.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.AindForceForagingTask.Block>)
    -> SelectMany CreateBlock => #14
        WorkflowInput Source1
        -> AsyncSubject ThisBlock

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=Trials)
        -> Merge
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    #12 -> AindForceForagingDataSchema.AindForceForagingTask.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.AindForceForagingTask.BlockGenerator>)
    -> SelectMany CreateBlockGenerator => #16
        WorkflowInput Source1
        -> AsyncSubject ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> AsyncSubject TrialBlueprint

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=BlockSize) => #5
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #7
        #5, #7 -> AindForceForagingDataSchema.AindForceForagingTask.SampleDistribution
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> AsyncSubject BlockLength

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject TrialBlueprint
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++ => #17
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        SubscribeSubject BlockLength
        -> PropertyMapping(Count) => #19
        #17, #19 -> RepeatCount(Count=0)
        -> Last
        -> WorkflowOutput
    #12 -> AindForceForagingDataSchema.AindForceForagingTask.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.AindForceForagingTask.BrownianRandomWalk>)
    -> SelectMany CreateRandomWalk => #18
        WorkflowInput Source1
        -> AsyncSubject ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> AsyncSubject TrialBlueprint

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=BlockSize) => #5
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #7
        #5, #7 -> AindForceForagingDataSchema.AindForceForagingTask.SampleDistribution
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> AsyncSubject BlockLength

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject TrialBlueprint
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++ => #17
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        SubscribeSubject BlockLength
        -> PropertyMapping(Count) => #19
        #17, #19 -> RepeatCount(Count=0)
        -> Last
        -> WorkflowOutput

        SubscribeSubject TrialBlueprint
        -> MemberSelector(Selector=LeftHarvest)
        -> SelectMany UpdateAction
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject CurrentAction

            SubscribeSubject CurrentAction
            -> MemberSelector(Selector=ActionUpdaters)
            -> Merge
            -> CreateObservable CreateUpdater
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ActionUpdater

                SubscribeSubject CurrentAction => #3
                SubscribeSubject ActionUpdater => #4
                SubscribeSubject ActionUpdater => #5
                -> Condition Time
                    WorkflowInput Source1
                    -> MemberSelector(Selector=UpdatedBy) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<AindForceForagingDataSchema.AindForceForagingTask.UpdateTargetParameterBy>(Value=Time))
                    -> WorkflowOutput
                -> SelectMany CalculateTimeSinceBlockStart
                    SubscribeSubject CurrentForce
                    -> MemberSelector(Selector=Seconds) => #1
                    SubscribeSubject BlockEntryTime => #2
                    #1, #2 -> CombineLatest
                    -> Take(Count=1)
                    -> Subtract
                    -> WorkflowOutput
                -> InputMapping(Value(Selector=it))
                -> BonVision.OptionalFloatProperty(Value=0.5, HasValue=true) => #9
                #5 -> Condition Trial
                    WorkflowInput Source1
                    -> MemberSelector(Selector=UpdatedBy) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<AindForceForagingDataSchema.AindForceForagingTask.UpdateTargetParameterBy>(Value=Trial))
                    -> WorkflowOutput
                -> BonVision.OptionalFloatProperty(Value=nil, HasValue=false) => #11
                #5 -> Condition Reward
                    WorkflowInput Source1
                    -> MemberSelector(Selector=UpdatedBy) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=WorkflowProperty<AindForceForagingDataSchema.AindForceForagingTask.UpdateTargetParameterBy>(Value=Reward))
                    -> WorkflowOutput
                -> BonVision.OptionalFloatProperty(Value=nil, HasValue=false) => #13
                #9, #11, #13 -> Merge
                -> Take(Count=1) => #15
                #3, #4, #15 -> Zip
                -> Take(Count=1) => #17
                SubscribeSubject RngSeed
                -> PropertyMapping(Random) => #19
                #17, #19 -> UpdateHarvestAction(Random="")
                -> WorkflowOutput
            -> Concat
            -> WorkflowOutput
    #14, #16, #18 -> Merge
    -> Repeat => #20
    SubscribeSubject BlockIndex
    -> Add(Operand=IntProperty(Value=1)) => #22
    SubscribeSubject BlockStatistics
    -> MemberSelector(Selector=Count) => #24
    #22, #24 -> Zip
    -> Equal => #26
    #20, #26 -> TakeUntil
    -> WorkflowOutput

Defer Logging => #25
    GroupWorkflow HarpLogging
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.FilterVisibility
        -> Harp.Behavior.GroupByRegister => #2
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Behavior.harp, Extension=bin)
        -> PropertyMapping(FileName) => #4
        #2, #4 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)
        -> WorkflowOutput

        SubscribeSubject HarpLoadCellsEvents
        -> Harp.AnalogInput.GroupByRegister => #8
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=LoadCells.harp, Extension=bin)
        -> PropertyMapping(FileName) => #10
        #8, #10 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpOlfactometerEvents
        -> Harp.Olfactometer.FilterVisibility
        -> Harp.Olfactometer.GroupByRegister => #14
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Olfactometer.harp, Extension=bin)
        -> PropertyMapping(FileName) => #16
        #14, #16 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplitLickDetector.GroupByRegister => #19
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=Lickometer.harp, Extension=bin)
        -> PropertyMapping(FileName) => #21
        #19, #21 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpClockGenEvents
        -> Harp.TimestampGeneratorGen3.GroupByRegister => #24
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=ClockGenerator.harp, Extension=bin)
        -> PropertyMapping(FileName) => #26
        #24, #26 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

        SubscribeSubject HarpAnalogInputEvents
        -> Harp.AnalogInput.FilterVisibility
        -> Harp.AnalogInput.GroupByRegister => #30
        IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateHarpLoggingPath.bonsai, SubjectName=LoggingRootPath, LogName=AnalogInput.harp, Extension=bin)
        -> PropertyMapping(FileName) => #32
        #30, #32 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil) => #33
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=Extensions\FilterNotNull.bonsai) => #36
        #33, #36 -> SubscribeWhen

    GroupWorkflow Camera
        IncludeWorkflow FaceCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=FaceCamera)
        IncludeWorkflow TopBodyCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=TopBodyCamera)
        IncludeWorkflow SideBodyCameraFrameEvent(Path=Extensions\CameraLogger.bonsai, LogName=SideBodyCamera)

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> AindForceForagingDataSchema.AindForceForagingSession.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Subject, DeviceName=Config, Extension=json)

        SubscribeSubject TaskLogicSchema
        -> AindForceForagingDataSchema.AindForceForagingTask.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=TaskLogic, DeviceName=Config, Extension=json)

        SubscribeSubject RigSchema
        -> AindForceForagingDataSchema.AindForceForagingRig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=Rig, DeviceName=Config, Extension=json)

        SubscribeSubject RawRigSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, LogName=RawRig, DeviceName=Config, Extension=json)

        SubscribeSubject RawSubjectSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, LogName=RawSubject, DeviceName=Config, Extension=json)

        SubscribeSubject RawTaskLogicSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, LogName=RawTaskLogic, DeviceName=Config, Extension=json)

    GroupWorkflow Render
        SubscribeSubject RendererSynchState
        -> Bonsai.Scripting.Expressions.ExpressionTransform Label
          Expression:
            new(
            it.FrameIndex.Value as FrameIndex,
            it.FrameTimestamp.Value as FrameTimestamp,
            it.SynchQuadValue.Value as SynchQuadValue)
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogCsv.bonsai
          LogName=RendererSynchState
          DeviceName=Renderer
          Extension=csv
          OmitHeader=false
          Delimiter=nil
          SubjectName=LoggingRootPath

    GroupWorkflow SoftwareEvents
        SubscribeSubject SoftwareEvent
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
        #1, #3 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #5
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
        #5, #7 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath)
        -> WorkflowOutput

        SubscribeSubject UpdaterEvents
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
        #14, #16 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #18
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #20
        #18, #20 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath)

        SubscribeSubject Annotations
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=Annotations)
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #27
        SubscribeSubject RendererSynchState
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #29
        #27, #29 -> WithLatestFrom
        -> AllenNeuralDynamics.Core.Logging.FramestampSoftwareEvent => #31
        SubscribeSubject HarpTimestampSource
        -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
        #31, #33 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath)

        SubscribeSubject UserComments
        -> MulticastSubject Annotations

        GroupWorkflow Metadata
            SubscribeSubject Repository
            -> MemberSelector(Selector=Head)
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RepositoryStatus)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject RngSeedValue
            -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=RngSeed)
            -> MulticastSubject SoftwareEvent

    GroupWorkflow Logs
        SubscribeSubject EndExperiment
        -> StringProperty(Value=ExperimentCompleted)
        -> AllenNeuralDynamics.Core.Logging.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.Logging.TimestampSoftwareEvent
        -> AllenNeuralDynamics.Core.Logging.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, LogName=EndSession, DeviceName=config, Extension=json)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #27
#25, #27 -> TakeUntil => #28
SubscribeSubject StartLogging => #29
#28, #29 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow VariableUpdaters
    SubscribeSubject TaskLogicSchema
    -> MemberSelector(Selector=Updaters)
    -> Take(Count=1)
    -> AsyncSubject VariableUpdaters

    BehaviorSubject<AllenNeuralDynamics.Core.Logging.SoftwareEvent> UpdaterEvents

GroupWorkflow TODO
    StringProperty
    -> ReplaySubject UserComments(BufferSize=nil)
    -> WorkflowOutput
